<CompuCell3D Revision="20180722" Version="3.7.8">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="1"/>
      <Steps>10000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="my_cell"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="my_cell">10.0</Energy>
      <Energy Type1="my_cell" Type2="my_cell">10.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="50" y="50" z="0"/>
         <BoxMax x="60" y="60" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>my_cell</Types>
      </Region>
   </Steppable>
</CompuCell3D>
